PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = replicate_nsd
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      skipIf = is_blank_trial
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    ImageComponent image
      image [set every repeat] = $current_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    KeyboardComponent press_if_repeat
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent set_up_blanks
      Code Type = Auto->JS
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      Begin Routine:
        if is_blank_trial:
            is_not_blank_trial = False
        else:
            is_not_blank_trial = True
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.3
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = put instructions here. press spacebar.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        participant_conditions_file = "conditions_files/participant" + expInfo["participant"] + "_.csv"
  Routine block
    RoutineSettingsComponent block
      skipIf = is_not_new_run
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run = True
      Begin Routine:
        is_not_new_run = True if not is_new_run else False
    CodeComponent set_up_block
      Code Type = Auto->JS
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = end of run. take a break.
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  Routine waiting_fmri
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    KeyboardComponent key_resp_2
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for scanner…
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  Routine blank_trial
    RoutineSettingsComponent blank_trial
      skipIf = is_not_blank_trial
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.3
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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Flow
  Routine waiting_fmri
  Routine set_up
  Routine instructions
  LoopInitiator loop_all_images loopType="TrialHandler"
    conditionsFile = $participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine blank_trial
    Routine block
  LoopTerminator loop_all_images
